PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  color = '#000000'
  expName = experiment
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine load_variables
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    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        import numpy as np

        response_image_width = 1.5
        response_image_height = 0.6

        # Counterbalancing code
        training_time = ["one", "two"] # if 50 = 250 trials, if 100 = 500 trials
        blocks = [1, 2]

        sound_blocks_white = ['white_training.csv', 'white_training.csv']
        sound_blocks_tones = ['tones_training.csv', 'tones_training.csv']
        mix_blocks = ['white_training.csv', 'tones_training.csv']

        total_trials = np.random.choice(training_time)

        # if this variable is 1. 500 trials are going to be played
        block_2_run = 1 if training_time == "two" else 0



        num_blocks = np.random.choice(blocks)

        block_to_play = sound_blocks_white


        #paths of images for feedback.
        left_90_feedback_path = "feedback/left_90_response.png"
        left_30_feedback_path = "feedback/left_30_response.png"
        center_feedback_path = "feedback/center_response.png"
        right_30_feedback_path = "feedback/right_30_response.png"
        right_90_feedback_path = "feedback/right_90_response.png"

        test_trials = 10 # 10*5 = 50
        training_trials = 55 # 50*5 = 250.
      Begin Experiment:
        def get_correct_response(sound_name):
        #    first we split and find the location.
            corr_resp = ""
            location = sound_name.split('/')[1].split('_')[0]
            print('location value : ', location)
            if location == "Left90":
                corr_resp = "z"
            elif location == "Left30":
                corr_resp = "x"
            elif location == "center":
                corr_resp = "c"
            elif location == "right30":
                corr_resp = "v"
            elif location == "right90":
                corr_resp = "b"
            else:
                print(f'Sound Location Not Found, Location : {location}')

            return corr_resp, location

        if block_2_run == 1:
            thisExp.addData('time', 'one')
        else:
            thisExp.addData('time', 'two')

        #block_to_play = []
        #if num_blocks == 1:
        #    block = np.random.choice(["white", "tone"])
        #    if block == "white":
        #        block_to_play = ['white_training.csv', 'white_training.csv']
        #    else:
        #        block_to_play = ['tones_training.csv', 'tones_training.csv']
        #    thisExp.addData('block', 'one')
        #    thisExp.addData('trained on', "white Noise" if block_to_play == sound_blocks_white else "700Hz Pure Tones")
        #elif num_blocks == 2:
        #    thisExp.addData('block', 'Two')
        #    block_to_play = np.random.shuffle(mix_blocks)
        #else:
        #    print('something went wrong')
        #
        #print(block_to_play)
  Routine Welcome
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    TextComponent text_norm
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        Welcome to the experiment.

        Press the spacebar to continue
    KeyboardComponent key_instruct
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent text_align
      Code Type = Both
      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        text_norm.alignText= 'left'
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('left')
  Routine pretest
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        thisExp.addData('trial_type', 'pre_test')
        thisExp.addData('condition', '300_oneBlock_reacclaimatise_posaccfeedback')
    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    SoundComponent sound_1
      sound [set every repeat] = $file_path
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
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    ImageComponent image
      image = response.png
      size = (response_image_width, response_image_height)
      startVal [time (s)] = 1.0
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    KeyboardComponent pretest_response
      allowedKeys = 'z','x','c','v','b'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      storeCorrect = True
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  Routine test
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        # Selecting a test sound randomly

        test_sound = np.random.choice(test_sounds)
        correct_response = get_correct_response(test_sound)

        thisExp.addData('trial_type', 'post_test')
        thisExp.addData('sound', test_sound)

        """
            We need to know the correct response.
            we need a way to check it.
            we need to store it.
        """

        # How do we know what is the correct response in each trial ?

        """
            Ideally, you should have a file where all the possible stimuli are mentioned
            which condition do they belong to.
            and what is the correct response for that condition.
        """
    PolygonComponent fixation_posttest
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    SoundComponent sound_2
      sound [set every repeat] = $test_sound
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
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    ImageComponent image_2
      image = response.PNG
      size = (response_image_width, response_image_height)
      startVal [time (s)] = 1.0
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    KeyboardComponent posttest_response
      allowedKeys = 'z','x','c','v','b'
      correctAns = $correct_response
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      storeCorrect = True
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  Routine training
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Now we will begin the training phase.

        The task remains the same. You have to try to guess where the sound is coming from and you will be given feedback.

        press spacebar to continue
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine feedback
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        # training_response.corr
        # location
        feedback_text = f"Incorrect, the sound came from {channel} {angle}" if training_response.corr == 0 else f"Correct, the sound came from {channel} {angle}"

        feedback_image = ""

        if channel == "left" and angle == 90:
            feedback_image = left_90_feedback_path
        elif channel == "left" and angle == 30:
            feedback_image = left_30_feedback_path
        elif channel == "center":
            feedback_image = center_feedback_path
        elif channel == "right" and angle == 30:
            feedback_image = right_30_feedback_path
        elif channel == "right" and angle == 90:
            feedback_image = right_90_feedback_path
        else :
            print('wrong location')
    TextComponent text_2
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text [set every repeat] = $feedback_text
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    ImageComponent image_4
      image [set every repeat] = $feedback_image
      pos = (0, 0.0)
      size = (response_image_width, response_image_height)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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  Routine routine_200_ms_gap
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    PolygonComponent polygon
      fillColor = white
      shape = rectangle
      size = (0.0, 0.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
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  Routine post_test
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        thisExp.addData('trial_type', 'test')
        thisExp.addData('condition', '300_oneBlock_reacclaimatise_posaccfeedback')
    PolygonComponent fixation_3
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    SoundComponent sound_4
      sound [set every repeat] = $file_path
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
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    ImageComponent image_5
      image = response.png
      size = (response_image_width, response_image_height)
      startVal [time (s)] = 1.0
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    KeyboardComponent pretest_response_2
      allowedKeys = 'z','x','c','v','b'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      storeCorrect = True
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  Routine Test_Instructions
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    TextComponent text_norm_2
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        Your training is complete.

        Now take a small break before we begin with the final test.

        press spacebar to start the break timer.
    KeyboardComponent key_instruct_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent text_align_2
      Code Type = Both
      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        text_norm.alignText= 'left'
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('left')
  Routine forced_break
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    TextComponent text_countdown
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
      text [set every frame] = $str(180-int(t))
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    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 180.
      text = press spacebar to continue
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 180.0
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    KeyboardComponent key_resp_3
      allowedKeys = 'h'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine thank_you
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        thank you for participating :)

        your time and effort will help us improve science.
  Routine training_block1
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        thisExp.addData('trial_type', 'training')
        thisExp.addData('condition', '300_oneBlock_reacclaimatise_posaccfeedback')
    PolygonComponent fixation_2
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    SoundComponent sound_3
      sound [set every repeat] = $file_path
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
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    ImageComponent image_3
      image = response.PNG
      size = (response_image_width, response_image_height)
      startVal [time (s)] = 1.0
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    KeyboardComponent training_response
      allowedKeys = 'z','x','c','v','b'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      storeCorrect = True
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  Routine training_block2
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    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Routine:
        thisExp.addData('trial_type', 'training')
    PolygonComponent fixation_4
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    SoundComponent sound_5
      sound [set every repeat] = $file_path
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
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    ImageComponent image_6
      image = response.PNG
      size = (response_image_width, response_image_height)
      startVal [time (s)] = 1.0
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    KeyboardComponent training_response_2
      allowedKeys = 'z','x','c','v','b'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      storeCorrect = True
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  Routine feedback_2
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    CodeComponent code_8
      Code Type = Auto->JS
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      Begin Routine:
        # training_response.corr
        # location
        feedback_text = f"Incorrect, the sound came from {channel} {angle}" if training_response_2.corr == 0 else f"Correct, the sound came from {channel} {angle}"

        feedback_image = ""

        if channel == "left" and angle == 90:
            feedback_image = left_90_feedback_path
        elif channel == "left" and angle == 30:
            feedback_image = left_30_feedback_path
        elif channel == "center":
            feedback_image = center_feedback_path
        elif channel == "right" and angle == 30:
            feedback_image = right_30_feedback_path
        elif channel == "right" and angle == 90:
            feedback_image = right_90_feedback_path
        else :
            print('wrong location')
    TextComponent text_4
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text [set every repeat] = $feedback_text
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    ImageComponent image_7
      image [set every repeat] = $feedback_image
      pos = (0, 0.0)
      size = (response_image_width, response_image_height)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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Flow
  Routine load_variables
  Routine Welcome
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = test_sounds.csv
    loopType = random
    nReps = test_trials
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    conditions:
      [OrderedDict([('file_path', 'test_stimuli/left_90_1000_test.wav'), ('angle', 90), ('channel', 'left'), ('corrAns', 'z')]),
      OrderedDict([('file_path', 'test_stimuli/right_90_1000_test.wav'), ('angle', 90), ('channel', 'right'), ('corrAns', 'b')]),
      OrderedDict([('file_path', 'test_stimuli/left_30_1000_test.wav'), ('angle', 30), ('channel', 'left'), ('corrAns', 'x')]),
      OrderedDict([('file_path', 'test_stimuli/right_30_1000_test.wav'), ('angle', 30), ('channel', 'right'), ('corrAns', 'v')]),
      OrderedDict([('file_path', 'test_stimuli/center_0_1000_test.wav'), ('angle', 0), ('channel', 'center'), ('corrAns', 'c')])]
    Routine pretest
  LoopTerminator trials
  Routine training
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = $block_to_play[0]
    loopType = random
    nReps = training_trials
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    conditions:
      [OrderedDict([('file_path', 'training_stimuli/white_noise/left_90_white_training.wav'), ('angle', 90), ('channel', 'left'), ('corrAns', 'z')]),
      OrderedDict([('file_path', 'training_stimuli/white_noise/right_90_white_training.wav'), ('angle', 90), ('channel', 'right'), ('corrAns', 'b')]),
      OrderedDict([('file_path', 'training_stimuli/white_noise/left_30_white_training.wav'), ('angle', 30), ('channel', 'left'), ('corrAns', 'x')]),
      OrderedDict([('file_path', 'training_stimuli/white_noise/right_30_white_training.wav'), ('angle', 30), ('channel', 'right'), ('corrAns', 'v')]),
      OrderedDict([('file_path', 'training_stimuli/white_noise/center_0_white_training.wav'), ('angle', 0), ('channel', 'center'), ('corrAns', 'c')])]
    Routine training_block1
    Routine feedback
  LoopTerminator trials_3
  LoopInitiator trials_5 loopType="TrialHandler"
    loopType = random
    nReps = 0
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    LoopInitiator trials_4 loopType="TrialHandler"
      conditionsFile = $block_to_play[1]
      loopType = random
      nReps = training_trials
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      conditions:
        [OrderedDict([('file_path', 'training_stimuli/pure_tones/left_90_700_training.wav'), ('angle', 90), ('channel', 'left'), ('corrAns', 'z')]),
        OrderedDict([('file_path', 'training_stimuli/pure_tones/right_90_700_training.wav'), ('angle', 90), ('channel', 'right'), ('corrAns', 'b')]),
        OrderedDict([('file_path', 'training_stimuli/pure_tones/left_30_700_training.wav'), ('angle', 30), ('channel', 'left'), ('corrAns', 'x')]),
        OrderedDict([('file_path', 'training_stimuli/pure_tones/right_30_700_training.wav'), ('angle', 30), ('channel', 'right'), ('corrAns', 'v')]),
        OrderedDict([('file_path', 'training_stimuli/pure_tones/center_0_700_training.wav'), ('angle', 0), ('channel', 'center'), ('corrAns', 'c')])]
      Routine training_block2
      Routine feedback_2
    LoopTerminator trials_4
  LoopTerminator trials_5
  Routine Test_Instructions
  Routine forced_break
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = test_sounds.csv
    loopType = random
    nReps = test_trials
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    conditions:
      [OrderedDict([('file_path', 'test_stimuli/left_90_1000_test.wav'), ('angle', 90), ('channel', 'left'), ('corrAns', 'z')]),
      OrderedDict([('file_path', 'test_stimuli/right_90_1000_test.wav'), ('angle', 90), ('channel', 'right'), ('corrAns', 'b')]),
      OrderedDict([('file_path', 'test_stimuli/left_30_1000_test.wav'), ('angle', 30), ('channel', 'left'), ('corrAns', 'x')]),
      OrderedDict([('file_path', 'test_stimuli/right_30_1000_test.wav'), ('angle', 30), ('channel', 'right'), ('corrAns', 'v')]),
      OrderedDict([('file_path', 'test_stimuli/center_0_1000_test.wav'), ('angle', 0), ('channel', 'center'), ('corrAns', 'c')])]
    Routine post_test
  LoopTerminator trials_2
  Routine thank_you
